OpenViBE-Scenario

0xc67a01dc LSL detection => #0
  Clock frequency (Hz) = 64
  Script = ${__volatile_ScenarioDir}/python_lsl.py
  Sampling frequency = 30
  Stream type = detection
  Stream name = detection_0
  Get all streams = false
  Generated epoch sample count = 16
-> Signal average
-> Matrix Display "detection"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
LSL BPM => #3
  Clock frequency (Hz) = 64
  Script = ${__volatile_ScenarioDir}/python_lsl.py
  Sampling frequency = 0
  Stream type = BPM
  Stream name = BPM_0
  Get all streams = true
  Generated epoch sample count = 16
-> Signal average
-> Matrix Display "BPM"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input 1=#3, Input 2=#0 -> Signal Merger => #6
Data=#6 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
