OpenViBE-Scenario
Comment
  testing remote ppg measures

LSL raw
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_lsl.py
  Sampling frequency = 30
  Stream type = PPG
  Stream name = PPG_0
  Get all streams = true
  Generated epoch sample count = 2
-> Channel Selector "1;4;7;10" => #1
  Channel List = 1;4;7;10
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename => #2
  New channel names = PSEyeRaw;Logitech;Kinect2RGB;Kinect2IR
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.25
-> 0xc67a01dc Temporal filter => #4
  Filter method = Butterworth
  Filter type = Low pass
  Filter order = 4
  Low cut frequency (Hz) = 0
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.5
Data=#4 -> Signal display "filter temporal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2 -> Epoch average => #6
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 4
Data=#6 -> Signal display "filter"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2 -> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
#1 -> Identity => #9
-> Signal average
-> Matrix Display "all"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Signal=#9 -> GDF file writer
  Filename = ${__volatile_ScenarioDir}/../data_validation/record-[$core{date}-$core{time}].gdf
Data=#9 -> Signal display "all"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
